#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: []

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

gui:
    time_series_gui:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        use_antialias: True  # optional, set to False if you encounter performance issues
        connect:
            _time_series_logic_con: time_series_reader_logic

logic:
    time_series_reader_logic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        max_frame_rate: 20  # optional (10Hz by default)
        calc_digital_freq: True  # optional (True by default)
        connect:
            _streamer_con: instream_dummy
            #_savelogic_con: <save_logic_name>

hardware:
    instream_dummy:
        module.Class: 'dummy.data_instream_dummy.InStreamDummy'
        digital_channels:  # optional, must provide at least one digital or analog channel
            - 'digital 1'
            - 'digital 2'
            - 'digital 3'
        analog_channels:  # optional, must provide at least one digital or analog channel
            - 'analog 1'
            - 'analog 2'
        digital_event_rates:  # optional, must have as many entries as digital_channels or just one
            - 1000
            - 10000
            - 100000
        # digital_event_rates: 100000
        analog_amplitudes:  # optional, must have as many entries as analog_channels or just one
            - 5
            - 10
        # analog_amplitudes: 10  # optional (10V by default)
